<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2024.1.5">
  <Settings>
    <Param val="3" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="" valType="str" updates="None" name="End Message"/>
    <Param val="{'participant':'f&quot;{randint(0, 999999):06.0f}&quot;', 'session':'001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="True" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="(1024, 768)" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="float" valType="str" updates="None" name="clockFormat"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="solo_project" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="" valType="code" updates="None" name="frameRate"/>
    <Param val="Attempting to measure frame rate of screen, please wait..." valType="str" updates="None" name="frameRateMsg"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="warning" valType="code" updates="None" name="logging level"/>
    <Param val="True" valType="bool" updates="None" name="measureFrameRate"/>
    <Param val="MIDDLE_BUTTON" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="True" valType="bool" updates="None" name="plCompanionRecordingEnabled"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="1" valType="code" updates="None" name="runMode"/>
    <Param val="False" valType="bool" updates="None" name="rush"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <PolygonComponent name="sq1" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="black" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="black" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="sq1" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(-0.5, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="triangle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <PolygonComponent name="sq2" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="black" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="black" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="sq2" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(-0.2, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="triangle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <PolygonComponent name="sq3" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="black" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="black" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="sq3" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0.2, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="triangle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <PolygonComponent name="sq4" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="black" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="black" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="sq4" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0.5, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="triangle" valType="str" updates="None" name="shape"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'1', '2', '3', '4'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="" valType="str" updates="None" name="deviceLabel"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="first key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <CodeComponent name="code" plugin="None">
        <Param val="" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="import * as random from 'random';&amp;#10;for (var triangle, _pj_c = 0, _pj_a = [sq1, sq2, sq3, sq4], _pj_b = _pj_a.length; (_pj_c &lt; _pj_b); _pj_c += 1) {&amp;#10;    triangle = _pj_a[_pj_c];&amp;#10;    triangle.fillColor = &quot;black&quot;;&amp;#10;}&amp;#10;if ((target === 0)) {&amp;#10;    t = Math.random.choice([1, 2, 3, 4]);&amp;#10;} else {&amp;#10;    t = target;&amp;#10;}&amp;#10;if ((t === 1)) {&amp;#10;    sq1.fillColor = &quot;white&quot;;&amp;#10;} else {&amp;#10;    if ((t === 2)) {&amp;#10;        sq2.fillColor = &quot;white&quot;;&amp;#10;    } else {&amp;#10;        if ((t === 3)) {&amp;#10;            sq3.fillColor = &quot;white&quot;;&amp;#10;        } else {&amp;#10;            if ((t === 4)) {&amp;#10;                sq4.fillColor = &quot;white&quot;;&amp;#10;            } else {&amp;#10;                throw new ValueError(`Unexpected target value: ${t}`);&amp;#10;            }&amp;#10;        }&amp;#10;    }&amp;#10;}&amp;#10;psychoJS.experiment.addData(&quot;t&quot;, t);&amp;#10;" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="import random&amp;#10;&amp;#10;# Reset all squares to black&amp;#10;for triangle in [sq1, sq2, sq3, sq4]:&amp;#10;    triangle.fillColor = 'black'&amp;#10;&amp;#10;# Determine the target square&amp;#10;if target == 0:  # If target is 0, choose randomly&amp;#10;    t = random.choice([1, 2, 3, 4])&amp;#10;else:  # Otherwise, use the provided target&amp;#10;    t = target&amp;#10;&amp;#10;# Highlight the selected square&amp;#10;if t == 1:&amp;#10;    sq1.fillColor = 'white'&amp;#10;elif t == 2:&amp;#10;    sq2.fillColor = 'white'&amp;#10;elif t == 3:&amp;#10;    sq3.fillColor = 'white'&amp;#10;elif t == 4:&amp;#10;    sq4.fillColor = 'white'&amp;#10;else:&amp;#10;    raise ValueError(f&quot;Unexpected target value: {t}&quot;)&amp;#10;&amp;#10;# Save the target square value in the data file&amp;#10;thisExp.addData('t', t)&amp;#10;" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Auto-&gt;JS" valType="str" updates="None" name="Code Type"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="if (key_resp.keys) {&amp;#10;    continueRoutine = false;&amp;#10;}&amp;#10;" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="# Example: Check if the routine should end based on key_resp&amp;#10;if key_resp.keys:&amp;#10;    continueRoutine = False  # Ends the current routine&amp;#10;" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="code" valType="code" updates="None" name="name"/>
      </CodeComponent>
    </Routine>
    <Routine name="instructions">
      <RoutineSettingsComponent name="instructions" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="instructions" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <TextComponent name="text" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="5.0" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="Hello!&amp;#10;You will see four triangles displayed horizontally on the screen. During each trial, one of the triangles will light up. Your task is to press the corresponding key as quickly and accurately as possible." valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="instructions"/>
    <LoopInitiator loopType="TrialHandler" name="trials">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="[OrderedDict([('seq', 'patterned'), ('target', 1)]), OrderedDict([('seq', 'patterned'), ('target', 3)]), OrderedDict([('seq', 'patterned'), ('target', 2)]), OrderedDict([('seq', 'patterned'), ('target', 4)]), OrderedDict([('seq', 'random'), ('target', 0)])]" valType="str"/>
      <Param name="conditionsFile" updates="None" val="sequence.csv" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="sequential" valType="str"/>
      <Param name="nReps" updates="None" val="20" valType="num"/>
      <Param name="name" updates="None" val="trials" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="trials"/>
  </Flow>
</PsychoPy2experiment>
