PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Study_Phase
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = “Familiar”,”Unfamiliar”
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Ubmit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/bttnc/Documents/psy310/word priming/conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'c_s_io_'), ('reference', 'book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('reference', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('reference', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_ble'), ('reference', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('reference', 'board'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'l_pt_p'), ('reference', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('reference', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 't_hi_t'), ('reference', 'T-shirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_y'), ('reference', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('reference', 'case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_r_is_'), ('reference', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_li_e'), ('reference', 'police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_r'), ('reference', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('reference', 'table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('reference', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('reference', 'vase'), ('old_new', 'new')])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
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = C:/Users/bttnc/Documents/psy310/word priming/words.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('study_word', 'book')]),
        OrderedDict([('study_word', 'cushion')]),
        OrderedDict([('study_word', 'phone')]),
        OrderedDict([('study_word', 'marble')]),
        OrderedDict([('study_word', 'board')]),
        OrderedDict([('study_word', 'laptop')]),
        OrderedDict([('study_word', 'chart')]),
        OrderedDict([('study_word', 'T-shirt')]),
        OrderedDict([('study_word', 'mouse')]),
        OrderedDict([('study_word', 'pastry')]),
        OrderedDict([('study_word', 'case')]),
        OrderedDict([('study_word', 'cruise')]),
        OrderedDict([('study_word', 'police')]),
        OrderedDict([('study_word', 'keys')]),
        OrderedDict([('study_word', 'poster')])]
      Routine Study_Phase
    LoopTerminator trials
  LoopTerminator trials_2
